---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1920
set title blank_img_gaze
set subject_parity odd
set subject_nr 1
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 0
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 26
set font_italic False
set font_family sans
set font_bold False
set experiment_path "C:\\Users\\Daniil\\PycharmProjects\\PythonProject"
set experiment_file "blank_img_gaze_v4.osexp"
set disable_garbage_collection True
set description "Face/house gaze experiment"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#7f7f7f"

define sequence experiment
	set flush_keyboard yes
	set description "Main experiment sequence"
	run pygaze_init True
	run main_script True

define inline_script main_script
	set description "Full experiment logic"
	___run__
	import random
	import csv
	import os
	from datetime import datetime
	SUBJECT_NR   = var.subject_nr
	SIZE_STIM    = (800, 600)
	SIZE_CUE     = (150, 150)
	T_START_FIX     = 1000
	T_IMG           = 1300
	T_BETWEEN_BLANK = 500
	T_MASK          = 500
	T_RETROCUE      = 140
	T_BLANK_GAZE    = 2000
	T_ITI           = 1000
	CONDITIONS = [
	    ("face_right.png",  "house_left.png",  "face_R_house_L_face1st"),
	    ("face_left.png",   "house_right.png", "face_L_house_R_face1st"),
	    ("house_right.png", "face_left.png",   "house_R_face_L_house1st"),
	    ("house_left.png",  "face_right.png",  "house_L_face_R_house1st"),
	]
	TRIALS_PER_CONDITION = 20
	HALF = 40
	TIMESTAMP = datetime.now().strftime('%Y%m%d_%H%M%S')
	LOG_FILE = os.path.join(
	    os.path.dirname(exp.experiment_file) if exp.experiment_file else ".",
	    f"log_subj_{SUBJECT_NR}_{TIMESTAMP}.csv"
	)
	def wait_ms(ms):
	    clock.sleep(ms)
	def show_cross():
	    c = Canvas()
	    c.line(start=(-16, 0), end=(16, 0), color='white', penwidth=1)
	    c.line(start=(0, -16), end=(0, 16), color='white', penwidth=1)
	    c.show()
	def show_blank():
	    c = Canvas()
	    return c.show()
	def show_text(text):
	    c = Canvas()
	    c.text(text, center=True, x=0, y=0, font_size=26, max_width=1400)
	    c.show()
	def show_image(filename, size=SIZE_STIM):
	    c = Canvas()
	    c.image(exp.pool[filename], center=True, x=0, y=0, w=size[0], h=size[1])
	    return c.show()
	def wait_key(allowed=None):
	    kb = Keyboard(keylist=(allowed or []) + ['escape'], timeout=None)
	    while True:
	        key, _ = kb.get_key()
	        if key == 'escape':
	            exp.end()
	        if allowed is None or key in allowed:
	            return key
	def get_vividness():
	    show_text(
	        "How vivid was your mental image?\n\n"
	        "1 = No image at all\n"
	        "2 = Vague / dim\n"
	        "3 = Moderately clear\n"
	        "4 = Perfectly clear and vivid"
	    )
	    return int(wait_key(allowed=['1','2','3','4']))
	def save_csv(log_rows):
	    if not log_rows:
	        return
	    with open(LOG_FILE, "w", newline="") as f:
	        writer = csv.DictWriter(f, fieldnames=log_rows[0].keys())
	        writer.writeheader()
	        writer.writerows(log_rows)
	def build_trial_list():
	    trials = []
	    for img1, img2, label in CONDITIONS:
	        cues = [1]*(TRIALS_PER_CONDITION//2) + [2]*(TRIALS_PER_CONDITION//2)
	        random.shuffle(cues)
	        for cue in cues:
	            trials.append({"img_first": img1, "img_second": img2,
	                           "condition_label": label, "img_for_gaze": cue})
	    random.shuffle(trials)
	    return trials
	def build_training_list():
	    trials = []
	    for img1, img2, label in CONDITIONS:
	        trials.append({"img_first": img1, "img_second": img2,
	                       "condition_label": label,
	                       "img_for_gaze": random.choice([1, 2])})
	    random.shuffle(trials)
	    return trials
	def run_trial(trial_num, trial_def, log_rows, is_training=False):
	    img1     = trial_def["img_first"]
	    img2     = trial_def["img_second"]
	    cue      = trial_def["img_for_gaze"]
	    label    = trial_def["condition_label"]
	    cue_file = f"retrocue_{cue}.png"
	    tag      = "training" if is_training else f"trial{trial_num}"
	    et       = exp.pygaze_eyetracker
	    if not is_training:
	        et.start_recording()
	        et.log(f"{tag}_start")
	    show_cross()
	    wait_ms(T_START_FIX)
	    t0 = show_image(img1, SIZE_STIM)
	    if not is_training: et.log(f"{tag}_StartImage1_{img1}_at_{t0}")
	    wait_ms(T_IMG)
	    if not is_training: et.log(f"{tag}_EndImage1_at_{clock.time()}")
	    show_blank()
	    wait_ms(T_BETWEEN_BLANK)
	    t0 = show_image(img2, SIZE_STIM)
	    if not is_training: et.log(f"{tag}_StartImage2_{img2}_at_{t0}")
	    wait_ms(T_IMG)
	    if not is_training: et.log(f"{tag}_EndImage2_at_{clock.time()}")
	    show_image("4mask.jpg", SIZE_STIM)
	    wait_ms(T_MASK)
	    t0 = show_image(cue_file, SIZE_CUE)
	    if not is_training: et.log(f"{tag}_StartRetroCue_{cue}_at_{t0}")
	    wait_ms(T_RETROCUE)
	    if not is_training: et.log(f"{tag}_EndRetroCue_at_{clock.time()}")
	    t0 = show_blank()
	    if not is_training: et.log(f"{tag}_StartBlankGaze_cued_{cue}_at_{t0}")
	    wait_ms(T_BLANK_GAZE)
	    if not is_training: et.log(f"{tag}_EndBlankGaze_at_{clock.time()}")
	    vividness = get_vividness()
	    if not is_training: et.log(f"{tag}_Vividness_{vividness}")
	    show_blank()
	    wait_ms(T_ITI)
	    if not is_training:
	        et.stop_recording()
	        cued_image = img1 if cue == 1 else img2
	        log_rows.append({
	            "trial_num": trial_num, "condition_label": label,
	            "img_first": img1, "img_second": img2,
	            "ImgForGaze_1st_or_2nd": cue,
	            "cued_image": cued_image, "vividness": vividness,
	        })
	        var.trial_num = trial_num
	        var.condition_label = label
	        var.img_first = img1
	        var.img_second = img2
	        var.ImgForGaze_1st_or_2nd = cue
	        var.vividness = vividness
	def run_training():
	    show_text(
	        "PRACTICE\n\nStudy each image pair carefully.\n"
	        "After the cue, imagine the indicated image as vividly as you can.\n"
	        "Rate how vivid your mental image was (1-4).\n\nPress SPACE to begin."
	    )
	    wait_key(allowed=['space'])
	    for i, t in enumerate(build_training_list(), 1):
	        run_trial(i, t, [], is_training=True)
	    show_text("Practice complete!\n\nPress SPACE to continue.")
	    wait_key(allowed=['space'])
	show_text("Welcome to the image viewing experiment\n\nPress SPACE to begin")
	wait_key(allowed=['space'])
	run_training()
	all_trials = build_trial_list()
	log_rows = []
	trial_num = 1
	show_text("Part 1 of 2\n\nPress SPACE to begin.")
	wait_key(allowed=['space'])
	for trial_def in all_trials[:HALF]:
	    run_trial(trial_num, trial_def, log_rows)
	    trial_num += 1
	save_csv(log_rows)
	show_text(
	    f"Part 1 complete ({HALF} of {HALF*2} trials). Results saved.\n\n"
	    "Press C to continue to Part 2\nPress Q to end the session now."
	)
	key = wait_key(allowed=['c','q'])
	if key == 'q':
	    show_text("Session ended. Thank you!\n\nPress SPACE to exit.")
	    wait_key(allowed=['space'])
	    exp.end()
	show_text("Part 2 of 2\n\nPress SPACE to begin.")
	wait_key(allowed=['space'])
	for trial_def in all_trials[HALF:]:
	    run_trial(trial_num, trial_def, log_rows)
	    trial_num += 1
	save_csv(log_rows)
	show_text("Experiment complete! Thank you.\n\nPress SPACE to exit.")
	wait_key(allowed=['space'])
	exp.end()
	__end__
	set _prepare ""

define pygaze_init pygaze_init
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile "gazepoint_data_subj_{subject_nr}"

