---
API: 3
OpenSesame: 4.1.6
Platform: nt
---
set width 1920
set title "PyGaze eye-tracking img"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_screen 0
set mouse_backend psycho
set keyboard_backend psycho
set height 1080
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 26
set font_italic False
set font_family serif
set font_bold False
set experiment_path "F:\\"
set disable_garbage_collection True
set description "A template for eye-tracking experiments"
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#7f7f7f"

define sketchpad ITI
	set duration 2000
	set description "Displays stimuli"

define sketchpad beforeCueFixation
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define sketchpad betweenImgFixation
	set duration 500
	set description isi
	draw fixdot color=white show_if=True style=default x=0 y=0 z_index=0

define sketchpad betweenImgsCrossFixation
	set duration 500
	set description "Displays stimuli"
	draw line color=white penwidth=1 show_if=True x1=0 x2=0 y1=-16 y2=16 z_index=0
	draw line color=white penwidth=1 show_if=True x1=-16 x2=16 y1=0 y2=0 z_index=0

define sketchpad blank_screen
	set duration 0
	set description "Blank screen for gaze recall period"

define sketchpad block_end_break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=True text="You may take a short break<br /><br />Press 'SPACE' to continue" x=0 y=0 z_index=0

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run trials_loop True
	run block_end_break "[count_trials_loop] <1"

define sketchpad chooseSession
	set duration keypress
	set description "decides whether first image displays stimulus on the right or left"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=True text="Run R / L ?" x=-32 y=0 z_index=0

define inline_script code_imageToPresent_gazeImage
	set description "Executes Python code"
	set _run ""
	___prepare__
	# print(f"DEBUG: selected_image_first is {var.selected_image_first}")
	# print(f"DEBUG: ImgForGaze_1st_or_2nd is {var.ImgForGaze_1st_or_2nd}")
	
	# # We create a new variable 'final_gaze_file' for the sketchpad to use
	        
	var.final_gaze_file = "3blank.jpg"        
	__end__

define inline_script code_image_to_be_presemted_as_first
	set description "Executes Python code"
	___run__
	# Check what the user pressed
	if var.response_chooseSession == 'r':
	    var.selected_image_first = "HotAirBaloonS_right.jpg"
	    var.selected_image_second = "HotAirBaloonS_left.jpg"
	elif var.response_chooseSession == 'l':
	    var.selected_image_first = "HotAirBaloonS_left.jpg"
	    var.selected_image_second = "HotAirBaloonS_right.jpg"
	else:
	    var.selected_image_first = "3blank.jpg" # A fallback image
	    var.selected_image_second = "3blank.jpg"
	__end__
	set _prepare ""

define sketchpad endTrial
	set duration 0
	set description "Displays stimuli"

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=True text="Press 'SPACE' to exit" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run pygaze_init True
	run chooseSession True
	run code_image_to_be_presemted_as_first True
	run instructions True
	run experimental_loop True
	run end_of_experiment True

define loop experimental_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 empty_column ""
	run block_sequence

define sketchpad first_img
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[selected_image_first]" scale=1 show_if=True x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=30 html=yes show_if=True text="welcome to the img viewing exp<br /><br />press 'SPACE' to begin" x=32 y=0 z_index=0

define inline_script log_drift_correction
	set description "Executes Python code"
	___run__
	import math
	
	# 1. Define the center in pixels
	# OpenSesame's var.width and var.height automatically get your resolution
	target_x = var.width / 2
	target_y = var.height / 2
	
	# 2. Set your strict gate (50 pixels)
	threshold = 50 
	passed = False
	
	while not passed:
	    # 3. Use the pixel coordinates
	    # We call drift_correction to the absolute pixel center
	    exp.pygaze_eyetracker.drift_correction(pos=(target_x, target_y), fix_triggered=True)
	    
	    # 4. Grab the gaze position
	    gaze_pos = exp.pygaze_eyetracker.sample()
	    
	    # 5. Calculate distance from the center pixels
	    error_x = gaze_pos[0] - target_x
	    error_y = gaze_pos[1] - target_y
	    dist_px = math.sqrt(error_x**2 + error_y**2)
	    
	    # 6. The Gate
	    if dist_px <= threshold:
	        passed = True
	        var.drift_error_px = dist_px
	        exp.pygaze_eyetracker.log(f"Drift_Check_Passed_Error_px_{dist_px}")
	    else:
	        # If they aren't looking at the center, the loop restarts
	        print(f"Distance {dist_px} too high. Please look at the center.")
	__end__
	set _prepare ""

define logger logger
	set description "Logs experimental data"
	set auto_log yes
	exclude "*_backend"
	exclude PERSISTENT
	exclude TEMPORARY
	exclude acc
	exclude accuracy
	exclude average_response_time
	exclude avg_rt
	exclude background
	exclude closed
	exclude "count_*"
	exclude credentialless
	exclude crossOriginIsolated
	exclude datetime
	exclude description
	exclude devicePixelRatio
	exclude disable_garbage_collection
	exclude experiment_file
	exclude experiment_path
	exclude "font_*"
	exclude foreground
	exclude form_clicks
	exclude fullscreen
	exclude height
	exclude innerHeight
	exclude innerWidth
	exclude isSecureContext
	exclude length
	exclude logfile
	exclude opensesame_codename
	exclude origin
	exclude originAgentCluster
	exclude outerHeight
	exclude outerWidth
	exclude "page?Offset"
	exclude round_decimals
	exclude "screen*"
	exclude "scroll?"
	exclude "sound_*"
	exclude start
	exclude status
	exclude "time_*"
	exclude total_correct
	exclude total_response_time
	exclude total_responses
	exclude width

define sketchpad mask
	set duration 500
	set description "Displays stimuli"
	draw image center=1 file="4mask.jpg" scale=1 show_if=True x=0 y=0 z_index=0

define inline_script new_1_inline_script
	set description "Blank gaze period - Canvas with no stimuli"
	___run__
	# 1. Create and show a truly blank canvas (gray, no stimuli)
	my_canvas = Canvas()
	my_canvas.clear(color='#7f7f7f')
	onset_time = my_canvas.show()
	
	# 2. Log START of blank gaze period
	msgStart_blankGaze = f"trial{var.count_trial_sequence}_StartBlankGazePeriod_cued_{var.ImgForGaze_1st_or_2nd}_at_{onset_time}"
	exp.pygaze_eyetracker.log(msgStart_blankGaze)
	
	# 3. Hold blank screen for gaze recall duration (2000 ms)
	clock.sleep(2000)
	
	# 4. Log END of blank gaze period
	offset_time = clock.time()
	msgEnd_blankGaze = f"trial{var.count_trial_sequence}_EndBlankGazePeriod_at_{offset_time}"
	exp.pygaze_eyetracker.log(msgEnd_blankGaze)
	__end__
	set _prepare ""

define sketchpad new_1_sketchpad
	set duration 1000
	set description "Displays stimuli"
	draw line color=white penwidth=1 show_if=True x1=0 x2=0 y1=-16 y2=16 z_index=0
	draw line color=white penwidth=1 show_if=True x1=-16 x2=16 y1=0 y2=0 z_index=0

define pygaze_drift_correct pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style "large-cross"
	set target_color "[foreground]"
	set keyboard_fallback no
	set fixation_triggered yes
	set drift_threshold 50
	set draw_target yes
	set description "Perform eye-tracker drift correction"
	set allow_recalibration yes

define pygaze_init pygaze_init
	set tracker_type OpenGaze
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile "D:/Gazepoint_projects/testingPTBexpWitheyegaze/eye_tracker_eyegaze_test/openSesameTesting/gazepoint/auditory_storyWithEyeMovements/gazepoint_data_subj_{subject_nr}"

define pygaze_log pygaze_log
	set throttle 0
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg "startTrial_[count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg "stopTrial_[count_trial_sequence]"
	set description "Stops recording of eye tracking data"

define sketchpad retrocue
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="{ImgForGaze_1st_or_2nd}.jpg" name="{ImgForGaze_1st_or_2nd}" scale=1 show_if=True x=0 y=0 z_index=0

define sketchpad second_img
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="[selected_image_second]" scale=1 show_if=True x=0 y=0 z_index=0

define sketchpad startTrialFixation
	set duration 200
	set description "Displays stimuli"
	draw line color=white penwidth=1 show_if=True x1=0 x2=0 y1=-16 y2=16 z_index=0
	draw line color=white penwidth=1 show_if=True x1=-16 x2=16 y1=0 y2=0 z_index=0

define inline_script trackingMSG_first_img
	set description "Executes Python code"
	___run__
	# 1. Prepare and Show
	item_to_show = items['first_img']
	item_to_show.prepare()
	onset_time = item_to_show.canvas.show()
	
	# 2. Log START to Gazepoint
	msgStart_img1 = f"trial{var.count_trial_sequence}_StartImage1_at_{onset_time}"
	exp.pygaze_eyetracker.log(msgStart_img1)
	
	# 3. Precise Delay- presentation duration of the image
	clock.sleep(1300)
	
	# 4. Log END to Gazepoint
	# This line MUST run to define offset_time
	offset_time = clock.time() 
	
	msgEnd_img1 = f"trial{var.count_trial_sequence}_EndImage1_at_{offset_time}"
	exp.pygaze_eyetracker.log(msgEnd_img1)
	
	# 5. Save the "Actual Duration" to OpenSesame
	# Now offset_time is guaranteed to exist
	# var.measured_dur_img1 = offset_time - onset_time
	__end__
	set _prepare ""

define inline_script trackingMSG_retroCue
	set description "Executes Python code"
	___run__
	# 1. Prepare and Show
	item_to_show = items['retrocue']
	item_to_show.prepare()
	onset_time = item_to_show.canvas.show()
	
	# 2. Log START to Gazepoint
	msgStart_retrocue = f"trial{var.count_trial_sequence}_StartRetroCue_ImgToPresent_{var.ImgForGaze_1st_or_2nd}_at_{onset_time}"
	exp.pygaze_eyetracker.log(msgStart_retrocue)
	
	# 3. Precise Delay- presentation duration of the image
	clock.sleep(140)
	
	# 4. Log END to Gazepoint
	# This line MUST run to define offset_time
	offset_time = clock.time() 
	
	msgEnd_retrocue = f"trial{var.count_trial_sequence}_EndRetroCue_at_{offset_time}"
	exp.pygaze_eyetracker.log(msgEnd_retrocue)
	__end__
	set _prepare ""

define inline_script trackingMSG_second_img
	set description "Executes Python code"
	___run__
	# 1. Prepare and Show
	item_to_show = items['second_img']
	item_to_show.prepare()
	onset_time = item_to_show.canvas.show()
	
	# 2. Log START to Gazepoint
	msgStart_img2 = f"trial{var.count_trial_sequence}_StartImage2_at_{onset_time}"
	exp.pygaze_eyetracker.log(msgStart_img2)
	
	# 3. Precise Delay - presentation duration of the image
	clock.sleep(1300)
	
	# 4. Log END to Gazepoint
	# This line MUST run to define offset_time
	offset_time = clock.time() 
	
	msgEnd_img2 = f"trial{var.count_trial_sequence}_EndImage2_at_{offset_time}"
	exp.pygaze_eyetracker.log(msgEnd_img2)
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard no
	set description "A single trial"
	run code_imageToPresent_gazeImage True
	run pygaze_drift_correct True
	run log_drift_correction True
	run pygaze_start_recording True
	run startTrialFixation True
	run first_img True
	run trackingMSG_first_img True
	run betweenImgsCrossFixation True
	run second_img True
	run trackingMSG_second_img True
	run mask True
	run new_1_sketchpad True
	run retrocue True
	run trackingMSG_retroCue True
	run blank_screen True
	run new_1_inline_script True
	run ITI True
	run endTrial True
	run pygaze_stop_recording True
	run pygaze_log True
	run logger True

define loop trials_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 10
	set continuous no
	set column_order ""
	set break_if_on_first no
	set break_if False
	setcycle 0 ImgForGaze_1st_or_2nd 1
	setcycle 1 ImgForGaze_1st_or_2nd 2
	setcycle 2 ImgForGaze_1st_or_2nd 1
	setcycle 3 ImgForGaze_1st_or_2nd 1
	setcycle 4 ImgForGaze_1st_or_2nd 2
	setcycle 5 ImgForGaze_1st_or_2nd 1
	setcycle 6 ImgForGaze_1st_or_2nd 2
	setcycle 7 ImgForGaze_1st_or_2nd 2
	setcycle 8 ImgForGaze_1st_or_2nd 1
	setcycle 9 ImgForGaze_1st_or_2nd 2
	run trial_sequence

